PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1200, 1200]
  color = white
  expName = bw
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine worst_trial
    UnknownComponent worst_trial_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      forceNonSlip = False
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent r1_1
      fillColor = gray
      lineColor = black
      lineWidth = 2
      pos = (-200, 200)
      shape = rectangle
      size [set every repeat] = (w1_tmp, h1_tmp)
      startVal [time (s)] = 0.0
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    PolygonComponent r2_1
      fillColor = gray
      lineColor = black
      lineWidth = 2
      pos = (0, 450)
      shape = rectangle
      size = (w2_tmp, h2_tmp)
      startVal [time (s)] = 0.0
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  Routine shuffle_3
    UnknownComponent shuffle_4
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      forceNonSlip = False
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent shuffle_rects
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        order=np.random.permutation(3)
        w_unshuffled=np.array([w1, w2, w3])
        h_unshuffled=np.array([h1, h2, h3])
        w1_tmp=w_unshuffled[order[1]]
        w2_tmp=w_unshuffled[order[2]]
        w3_tmp=w_unshuffled[order[3]]
        h1_tmp=h_unshuffled[order[1]]
        h2_tmp=h_unshuffled[order[2]]
        h3_tmp=h_unshuffled[order[3]]
  Routine shuffle_2
    UnknownComponent shuffle_5
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      forceNonSlip = False
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent shuffle_6
      Code Type = Auto->JS
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      Begin Routine:
        order=np.random.permutation(3)
        w_unshuffled=np.array([w1, w2, w3])
        h_unshuffled=np.array([h1, h2, h3])
        w1_tmp=w_unshuffled[order[1]]
        w2_tmp=w_unshuffled[order[2]]
        w3_tmp=w_unshuffled[order[3]]
        h1_tmp=h_unshuffled[order[1]]
        h2_tmp=h_unshuffled[order[2]]
        h3_tmp=h_unshuffled[order[3]]
  Routine set_condition
    UnknownComponent set_condition_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      forceNonSlip = False
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent get_cond
      Code Type = Auto->JS
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      Begin Experiment:
        rtmp = np.random.uniform()
        testing=True
        if testing:
            cond="bw"
            do_bw=True
            do_wb=False
        elif rtmp < .5:
            cond="bw"
            do_bw=True
            do_wb=False
        else:
            cond="wb"
            do_bw=False
            do_wb=True
  Routine bw_trial
    UnknownComponent bw_trial_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      forceNonSlip = False
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent r1
      fillColor = gray
      lineColor = black
      lineWidth = 2
      pos = (-200, 200)
      shape = rectangle
      size [set every repeat] = (w1_tmp, h1_tmp)
      startVal [time (s)] = 0.0
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    PolygonComponent r2
      fillColor = gray
      lineColor = black
      lineWidth = 2
      pos = (0, 450)
      shape = rectangle
      size = (w2_tmp, h2_tmp)
      startVal [time (s)] = 0.0
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    PolygonComponent r3
      fillColor = gray
      lineColor = black
      lineWidth = 2
      pos = (200, 200)
      shape = rectangle
      size = (w3_tmp, h3_tmp)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent button_1
      bold = True
      borderColor = glack
      fillColor = black
      forceEndRoutine = True
      letterHeight = 15
      size = 50, 50
      startVal [time (s)] = 0
      text = 1
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Flow
  Routine set_condition
  LoopInitiator bw_dummy loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = do_bw
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    LoopInitiator bw_trials loopType="TrialHandler"
      conditionsFile = test_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132},
        {'w1': 150, 'h1': 200, 'w2': 175, 'h2': 100, 'w3': 140, 'h3': 132}]
      Routine shuffle_2
      Routine bw_trial
    LoopTerminator bw_trials
  LoopTerminator bw_dummy
